<CompuCell3D Revision="2" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>100</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="400" y="400" z="1"/>
      <Steps>4001</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="CELL"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="CELL" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="CELL" LambdaSurface="2.0" TargetSurface="20"/>
   </Plugin>
   
   <Plugin Name="ExternalPotential">
      
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="CELL">{{CE}}</Energy>
      <Energy Type1="CELL" Type2="CELL">5.1</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>

<Plugin Name="PixelTracker">
</Plugin>

<Plugin Name="CellTypeMonitor">
</Plugin>
      
   <Steppable Type="ReactionDiffusionSolverFE">

      <DiffusionField Name="phi_field">
         <DiffusionData>
            <FieldName>phi_field</FieldName>
            <DiffusionConstant>0.0</DiffusionConstant>
            <DecayConstant>0</DecayConstant>
         </DiffusionData>
        <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>      

      <DiffusionField Name="rm_abi">
         <DiffusionData>
            <FieldName>rm_abi</FieldName>
            <DiffusionConstant>0.0</DiffusionConstant>
            <DecayConstant>0</DecayConstant>
         </DiffusionData>
        <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>      

      <DiffusionField Name="IsBoundary">
         <DiffusionData>
            <FieldName>IsBoundary</FieldName>
            <DiffusionConstant>0.0</DiffusionConstant>
            <DecayConstant>0</DecayConstant>
         </DiffusionData>
        <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>      
   
      <DiffusionField Name="alpha">
         <DiffusionData>
            <FieldName>alpha</FieldName>
            <DiffusionConstant>0.0000000001</DiffusionConstant>
            <DiffusionCoefficient CellType="CELL">0.0</DiffusionCoefficient>            
            <AdditionalTerm>
            <![CDATA[
            (CellType==1 ? 1: 0)*{{r_alpha}}*(rm_abi*phi_field*IsBoundary - alpha) - (CellType==0 ? 1: 0)*{{r_alpha_neg}}*(alpha)
            ]]>
            </AdditionalTerm>
            </DiffusionData>
        <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>      

   </Steppable>

<Steppable Type="BlobInitializer">
   <Region>
      <Center x="200" y="200" z="0"/>
      <Radius>20</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>CELL</Types>
   </Region>
</Steppable>
</CompuCell3D>